PsychoPy2experiment version="2022.2.2"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Priming
  keyboardBackend = ioHub
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Routines
  Routine Study
    TextComponent Studytext
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $Study_word
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    SliderComponent studyslider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine Test
    TextComponent timer_text
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos [set every repeat] = (0.4,0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $round(10 - t, ndigits = 1)
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    TextComponent testtext
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test_word
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    TextboxComponent test_textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent submit_text
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to Submit
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    MouseComponent testmouse
      clickable = submit_text
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    CodeComponent TimerCode
      Code Type = Auto->JS
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      Begin Routine:
        timer_text.text = ''
      Each Frame:
        timer_text.text = str(round(10-routineTimer.getTime()))
      End Routine:
        item_status= ''

        if(test_textbox.text == corrAns):
            corrAns= 0
            item_status = 'hit'
        else:
            item_status = 'miss'
        thisExp.addData ('item_status', item_status)
Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Tutorial5 studylist.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Study_word': 'book '},
      {'Study_word': 'cushion '},
      {'Study_word': 'phone'},
      {'Study_word': 'marble'},
      {'Study_word': 'board'}]
    Routine Study
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = tutorial5 testlistagain.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test_word': '_o_rd', 'corrAns': 'board', 'old_new': 'old'},
      {'test_word': 'bo_t_e', 'corrAns': 'bottle', 'old_new': 'new'},
      {'test_word': '_a_bl_', 'corrAns': 'marble', 'old_new': 'old'},
      {'test_word': 'c_m_ra', 'corrAns': 'camera', 'old_new': 'new'},
      {'test_word': '_ho_e', 'corrAns': 'phone', 'old_new': 'old'},
      {'test_word': '_oo_', 'corrAns': 'book', 'old_new': 'old'},
      {'test_word': 'c_s_io_', 'corrAns': 'cushion', 'old_new': 'old'},
      {'test_word': 'ta_l_', 'corrAns': 'table', 'old_new': 'new'},
      {'test_word': 'p_nc_l', 'corrAns': 'pencil', 'old_new': 'new'},
      {'test_word': 'v_s_', 'corrAns': 'vase', 'old_new': 'new'}]
    Routine Test
  LoopTerminator trials_2
